<?xml version="1.0" ?>
<RecipeFile>

	<!-- Sanger_GA2-PEM2X_2x76Cycle_v8.3.xml -->
	<!-- Use ONLY with a PEMIIx (Rev G) containing a 250uL Priming Pump-->
	<!-- For use with ImageCyclePump (AF5 protocol) config file -->
	<!-- For use with v4 Cluster kits -->
	<!-- For SBS Kit Version: 5 -->
	<!-- NOT COMPATIBLE with Standard v4 SBS kits (using IMX36) -->
	<!-- Last updated 15jun10 - TWBO -->

	<!-- Single Folder Paired End Recipe -->
	<!-- Read 1 SBS (including FirstBase), Read 2 PEM Prime and Prep, Read 2 SBS (including FirstBase) -->

	<!-- Optimisation of wash buffer steps in CompleteCycle -->
	<!-- IMR delivery of 60 and 10 volumes -->
	<!-- Incorporation time increased from 240 s to 291 s -->
	<!-- Deblock increased from 180 s to 240 s -->
	<!-- Inclusion of a User Event during CompleteCycle to pause SCS if RTA is lagging in early cycles -->

	<!-- 60 ul/min SMX pump flowrate -->

	<!-- Exposure Time: 1225ms (A=500, C=350, G=200, T=175) -->
	<!-- No. Tiles Per Column: 60 -->
	<!-- No. Cycles: 2 x 76 -->


  <TileSelection>

    <Incorporation>
	<Lane Index="1"><RowRange Min="1" Max="60"/></Lane>
	<Lane Index="2"><RowRange Min="1" Max="60"/></Lane>
    </Incorporation>

    <ReadPrep>
  	<Row Index="5" /> 
  	<Row Index="26" /> 
  	<Row Index="45" /> 
    </ReadPrep>

  </TileSelection>


  <ChemistryDefinitions>

	<!-- DEFINITIONS: GENOME ANALYZER SBS -->
     
    <Chemistry Name="FirstBase">
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="80" />
	<Temp Temperature="55" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="60" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="10" />
  	<Wait Duration="211000" />
  	<Temp Temperature="22" />
	<TempOff />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="60" />
	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="CompleteCycle">
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="55" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="85" />
	<PumpToFlowcell Solution="4" AspirationRate="250" DispenseRate="2500" Volume="145" />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="80" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="60" />
  	<Wait Duration="80000" />
  	<PumpToFlowcell Solution="1" AspirationRate="250" DispenseRate="2500" Volume="10" />
  	<Wait Duration="211000" />
  	<Temp Temperature="22" />
	<TempOff />
  	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="60" />
	<UserProgram Path="..\..\..\EventScripts\Check_RTA_Lag.cmd" Minimized="false" Shell="true" Wait="true"/>
	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="EndDeblock">
    	<TempOff />
	<PumpToFlowcell Solution="7" AspirationRate="250" DispenseRate="2500" Volume="125" />
	<Temp Temperature="55" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="75" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<PumpToFlowcell Solution="6" AspirationRate="250" DispenseRate="2500" Volume="25" />
	<Wait Duration="80000" />
	<Temp Temperature="22" />
	<TempOff />
	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="60" />
    </Chemistry>

    <Chemistry Name="PR2Flush">
  	<PumpToFlowcell Solution="5" AspirationRate="250" DispenseRate="2500" Volume="100" /> 
    </Chemistry>

    <Chemistry Name="SMXFlush">
  	<PumpToFlowcell Solution="3" AspirationRate="60" DispenseRate="2500" Volume="75" /> 
    </Chemistry>
    
    <Chemistry Name="End">
    	<TempOff />
  	<PumpToFlowcell Solution="2" AspirationRate="250" DispenseRate="2500" Volume="500" /> 
    </Chemistry>


	<!-- DEFINITIONS: PAIRED END MODULE PEMIIx (PRIME) -->

    <Chemistry Name="Prime10x3">
      <Prime Reagent="10" /><Prime Reagent="10" /><Prime Reagent="10" />
    </Chemistry>

    <Chemistry Name="Prime10x1">
      <Prime Reagent="10" />
    </Chemistry>

    <Chemistry Name="Prime11x3">
      <Prime Reagent="11" /><Prime Reagent="11" /><Prime Reagent="11" />
    </Chemistry>

    <Chemistry Name="Prime11x1">
      <Prime Reagent="11" />
    </Chemistry>

    <Chemistry Name="Prime12x3">
      <Prime Reagent="12" /><Prime Reagent="12" /><Prime Reagent="12" />
    </Chemistry>

    <Chemistry Name="Prime12x1">
      <Prime Reagent="12" />
    </Chemistry>

    <Chemistry Name="Prime13x3">
      <Prime Reagent="13" /><Prime Reagent="13" /><Prime Reagent="13" />
    </Chemistry>

    <Chemistry Name="Prime13x1">
      <Prime Reagent="13" />
    </Chemistry>

    <Chemistry Name="Prime14x3">
      <Prime Reagent="14" /><Prime Reagent="14" /><Prime Reagent="14" />
    </Chemistry>

    <Chemistry Name="Prime14x1">
      <Prime Reagent="14" />
    </Chemistry>

    <Chemistry Name="Prime15x3">
      <Prime Reagent="15" /><Prime Reagent="15" /><Prime Reagent="15" />
    </Chemistry>

    <Chemistry Name="Prime15x1">
      <Prime Reagent="15" />
    </Chemistry>

    <Chemistry Name="Prime16x3">
      <Prime Reagent="16" /><Prime Reagent="16" /><Prime Reagent="16" />
    </Chemistry>

    <Chemistry Name="Prime16x1">
      <Prime Reagent="16" />
    </Chemistry>

   <Chemistry Name="Prime19x3">
      <Prime Reagent="19" /><Prime Reagent="19" /><Prime Reagent="19" />
    </Chemistry>

    <Chemistry Name="Prime19x1">
      <Prime Reagent="19" />
    </Chemistry>

    <Chemistry Name="Prime21x4">
      <Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" /><Prime Reagent="21" />
    </Chemistry>

    <Chemistry Name="Prime21x1">
      <Prime Reagent="21" />
    </Chemistry>
   
	<!-- DEFINITIONS: PAIRED END MODULE PEMIIx (READ 2 PREPARATION / RESYNTHESIS) -->
    <Chemistry Name="Flow_test">
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2000" Volume="250" />
    </Chemistry>

    <Chemistry Name="Denaturation">
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="19" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Deprotection">
      <PumpToFlowcell Solution="10" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="1800000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Pre-resynthesis_wash">
      <PumpToFlowcell Solution="14" AspirationRate="60" DispenseRate="2500" Volume="150" />
      <Temp Temperature="60" Duration="120000"/>
    </Chemistry>    

    <Chemistry Name="Resynthesis">
      <PumpToFlowcell Solution="15" AspirationRate="30" DispenseRate="2500" Volume="28" />
      <PumpToFlowcell Solution="14" AspirationRate="30" DispenseRate="2500" Volume="28" />
      <PumpToFlowcell Solution="13" AspirationRate="30" DispenseRate="2500" Volume="36" />
    </Chemistry>

    <Chemistry Name="Post-resynthesis_wash">
      <PumpToFlowcell Solution="21" AspirationRate="30" DispenseRate="2500" Volume="245" />
      <Temp Temperature="20" Duration="120000"/>
    </Chemistry>

    <Chemistry Name="Linearisation 2">
      <PumpToFlowcell Solution="11" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="1800000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <TempOff />
    </Chemistry>

    <Chemistry Name="Combined_blocking_1_2_new">
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="38" Duration="120000"/>
      <Wait Duration="540000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="20" />
      <Wait Duration="540000"/>
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="20" />
      <Wait Duration="540000"/>    
      <PumpToFlowcell Solution="12" AspirationRate="60" DispenseRate="2500" Volume="25" />
      <Temp Temperature="60" Duration="120000"/>
      <Wait Duration="900000"/>
      <Temp Temperature="20" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
    </Chemistry>

    <Chemistry Name="Rehybridisation">
      <PumpToFlowcell Solution="19" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <PumpToFlowcell Solution="16" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="60" Duration="120000"/>
      <Wait Duration="900000"/>
      <Temp Temperature="40" Duration="120000"/>
      <PumpToFlowcell Solution="21" AspirationRate="60" DispenseRate="2500" Volume="75" />
      <Temp Temperature="20" Duration="120000"/>
      <TempOff />
    </Chemistry>

  </ChemistryDefinitions>


  <Protocol>

	<!-- READ 1 SBS -->

    <UserWait Message="This recipe will perform a paired end sequencing run (including read 2 resynthesis) and place the data into a single run folder.     Please verify that you have correctly specified the number of cycles and ensure you have adequate storage space in the run folder for a run of that length.   Click OK to Continue, or CANCEL to Stop." />

    <ChemistryRef Name="FirstBase" />

    <Calibrate />

    <Findedge />
    
    <ReadPrep ExposureA="400" ExposureC="400" ExposureG="400" ExposureT="400" />
   
    <ChemistryRef Name="PR2Flush" /> 
    
    <UserWait Message="Please Evaluate the First Base Report Data For Read 1 and verify the Calibration Results from the View menu.    Click OK to Proceed to First Cycle Imaging, or CANCEL to Stop." />

		<!--      Read 1 - Cycle 1       -->
    <Incorporation ChemistryName="SMXFlush" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />
 
		<!--      Read 1 - Cycle 2       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    		<!--      Read 1 - Cycle 3       -->
    <Incorporation ChemistryName="CompleteCycle" ExposureA="500" ExposureC="350" ExposureG="200" ExposureT="175" />

    <ChemistryRef Name="EndDeblock" />

    <UserWait Message="Read 1 SBS Complete." />
    
    <UserWait Message="To check correct operation of the PEM priming pump, place PEM waste tube into a 15 ml falcon tube. Load water onto the Paired End Module (Positions #10, #11, #12, #13, #14, #15, #16, #19, #21. Click OK to Continue." />

	<!-- PEM water prewash -->

    <ChemistryRef Name="Prime10x3" />
    <ChemistryRef Name="Prime11x3" />
    <ChemistryRef Name="Prime12x3" />
    <ChemistryRef Name="Prime13x3" />
    <ChemistryRef Name="Prime14x3" />  
    <ChemistryRef Name="Prime15x3" />
    <ChemistryRef Name="Prime16x3" />  
    <ChemistryRef Name="Prime19x3" />  
    <ChemistryRef Name="Prime21x4" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 7 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />  

    <UserWait Message="PEM prewash Complete.    Load Read 2 Resynthesis Reagents onto the Paired End Module (RMX-#10, LMX2-#11, BMX-#12, AMX2-#13, APM2-#14, AT2-#15, HP2-#16, Dil HP3-#19, HT2-#21. Click OK to Continue." />

	<!-- PEM reagent prime -->

    <ChemistryRef Name="Prime10x3" />
    <ChemistryRef Name="Prime11x3" />
    <ChemistryRef Name="Prime12x3" />
    <ChemistryRef Name="Prime13x3" />
    <ChemistryRef Name="Prime14x3" />  
    <ChemistryRef Name="Prime15x3" />
    <ChemistryRef Name="Prime16x3" />  
    <ChemistryRef Name="Prime19x3" />  
    <ChemistryRef Name="Prime21x4" />

    <UserWait Message="Priming complete. Check the waste tube. Click OK if the volume dispensed is 7 ml's and proceed to the next step. Otherwise, click Cancel and seek assistance before proceeding further" />

    <UserWait Message="You are about to run a pump test to check correct flow from PEM to GA by flowing wash buffer across the flowcell. Place GA waste tubes in a 15 ml falcon tube. Press OK to continue" />

    <ChemistryRef Name="Flow_test" />

    <UserWait Message="Check the waste tube. Click OK if the volume dispensed is 2 ml. Otherwise, click Cancel and seek assistance before proceeding further" />

    <UserWait Message="Place all waste lines back in waste bottle and click OK to Start PE Read 2 Preparation on the PE Module" />
	<!-- READ 2 PREPARATION / RESYNTHESIS (PEMIIx) -->

    <ChemistryRef Name="Denaturation" />
    <ChemistryRef Name="Deprotection" />
    <ChemistryRef Name="Pre-resynthesis_wash" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Resynthesis" />
    <ChemistryRef Name="Post-resynthesis_wash" />
    <ChemistryRef Name="Linearisation 2" />
    <ChemistryRef Name="Combined_blocking_1_2_new" />
    <ChemistryRef Name="Rehybridisation" />

    <UserWait Message="Resynthesis complete.    Load water onto the Paired End Module (Positions #10, #11, #12, #13, #14, #15, #16, #19, #21. Click OK to Continue." />

	<!-- PEM water postwash -->

    <ChemistryRef Name="Prime10x1" />
    <ChemistryRef Name="Prime11x1" />
    <ChemistryRef Name="Prime12x1" />
    <ChemistryRef Name="Prime13x1" />
    <ChemistryRef Name="Prime14x1" />  
    <ChemistryRef Name="Prime15x1" />
    <ChemistryRef Name="Prime16x1" />  
    <ChemistryRef Name="Prime19x1" />  
    <ChemistryRef Name="Prime21x1" />

    <UserWait Message="Load Read 2 SBS reagents onto the GA. Click OK to Continue." />

	<!-- READ 2 SBS (includes FirstBase) -->
    <ChemistryRef Name="FirstBase" />

    <UserWait Message="Read 2 First Base Incorporation Chemistry Complete.    Click OK to continue, or CANCEL to Stop." />

    <Calibrate />

    <ReadPrep ExposureA="400" ExposureC="400" ExposureG="400" ExposureT="400" /> 

    <ChemistryRef Name="PR2Flush" /> 

    <UserWait Message="Please Evaluate the First Base Report Data For Read 2. Click OK to Proceed to Imaging, or CANCEL to Stop." />

    <ChemistryRef Name="End" />

  </Protocol>

</RecipeFile>
