<?xml version="1.0"?>
<RecipeFile xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:xsd="http://www.w3.org/2001/XMLSchema">
  <Protocol>
    <ReadRef Description="Read1" ReadName="Read1" />
    <LoadReagentsRef Description="Paired End Reagents" ReagentsName="PairedEndReagents" />
    <ChemistryRef Description="End Deblock" ChemistryName="EndDeblock" />
    <PrimeRef Description="Paired End Prime" PrimeName="PairedEndPrime" />
    <ChemistryRef Description="Paired End Turnaround" ChemistryName="PETurnaround" />
    <ReadRef Description="Read2" ReadName="Read2" />
  </Protocol>
  <ChemistryDefinitions>
    <ChemistryDefinition Name="CompleteCycle">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB3" AspirationRate="120" DispenseRate="2500" Volume="125" />
        <Temp Temperature="55" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="75" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="25" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="25" />
        <Wait Duration="80000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="40" />
        <PumpToFlowcell Solution="0" ReagentName="SB1" AspirationRate="120" DispenseRate="2500" Volume="100" />
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="40" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="ICR" AspirationRate="120" DispenseRate="2500" Volume="50" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="ICR" AspirationRate="120" DispenseRate="2500" Volume="12" />
        <Wait Duration="211000" />
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="60" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBase">
      <ChemistryStep Description="Incorporation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="75" />
        <Temp Temperature="55" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="ICR" AspirationRate="120" DispenseRate="2500" Volume="50" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="ICR" AspirationRate="120" DispenseRate="2500" Volume="12" />
        <Wait Duration="211000" />
        <Temp Temperature="20" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="60" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="End">
      <ChemistryStep Description="Safe State" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="500" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblock">
      <ChemistryStep Description="Deblock" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB3" AspirationRate="120" DispenseRate="2500" Volume="125" />
        <Temp Temperature="55" Duration="0" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="75" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="25" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="CMR" AspirationRate="120" DispenseRate="2500" Volume="25" />
        <Wait Duration="80000" />
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="75" />
        <TempOff />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="SB2" AspirationRate="120" DispenseRate="2500" Volume="40" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PETurnaround">
      <ChemistryStep Description="Denaturation" Repeat="1">
        <Temp Temperature="20" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <PumpToFlowcell Solution="0" ReagentName="HP3" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
      </ChemistryStep>
      <ChemistryStep Description="Deprotection" Repeat="1">
        <Prime Solution="10" />
        <PumpToFlowcell Solution="0" ReagentName="RMX" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Temp Temperature="38" Duration="120000" />
        <Wait Duration="900000" />
        <PumpToFlowcell Solution="0" ReagentName="RMX" AspirationRate="60" DispenseRate="2500" Volume="25" />
        <Wait Duration="900000" />
        <PumpToFlowcell Solution="0" ReagentName="RMX" AspirationRate="60" DispenseRate="2500" Volume="25" />
        <Wait Duration="900000" />
        <Temp Temperature="20" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
      </ChemistryStep>
      <ChemistryStep Description="Pre-resynthesis_wash" Repeat="1">
        <Prime Solution="15" />
        <Prime Solution="13" />
        <Prime Solution="14" />
        <PumpToFlowcell Solution="0" ReagentName="APM2" AspirationRate="60" DispenseRate="2500" Volume="180" />
        <Temp Temperature="55" Duration="120000" />
      </ChemistryStep>
      <ChemistryStep Description="Resynthesis" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="AT2" AspirationRate="30" DispenseRate="2500" Volume="21" />
        <PumpToFlowcell Solution="0" ReagentName="AMX2" AspirationRate="30" DispenseRate="2500" Volume="42" />
        <PumpToFlowcell Solution="0" ReagentName="APM2" AspirationRate="30" DispenseRate="2500" Volume="60" />
      </ChemistryStep>
      <ChemistryStep Description="Post-resynthesis_wash" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="30" DispenseRate="2500" Volume="245" />
        <Temp Temperature="20" Duration="120000" />
      </ChemistryStep>
      <ChemistryStep Description="Linearisation 2" Repeat="1">
        <Prime Solution="11" />
        <PumpToFlowcell Solution="0" ReagentName="LMX2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Temp Temperature="38" Duration="120000" />
        <Wait Duration="1800000" />
        <Temp Temperature="20" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <TempOff />
      </ChemistryStep>
      <ChemistryStep Description="Combined_blocking_1_2_new" Repeat="1">
        <Prime Solution="12" />
        <Temp Temperature="20" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="BMX" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Temp Temperature="38" Duration="120000" />
        <Wait Duration="540000" />
        <PumpToFlowcell Solution="0" ReagentName="BMX" AspirationRate="60" DispenseRate="2500" Volume="20" />
        <Wait Duration="540000" />
        <PumpToFlowcell Solution="0" ReagentName="BMX" AspirationRate="60" DispenseRate="2500" Volume="20" />
        <Wait Duration="540000" />
        <PumpToFlowcell Solution="0" ReagentName="BMX" AspirationRate="60" DispenseRate="2500" Volume="25" />
        <Temp Temperature="60" Duration="120000" />
        <Wait Duration="900000" />
        <Temp Temperature="20" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
      </ChemistryStep>
      <ChemistryStep Description="Rehybridisation" Repeat="1">
        <PumpToFlowcell Solution="0" ReagentName="HP3" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Prime Solution="16" />
        <PumpToFlowcell Solution="0" ReagentName="HP2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Temp Temperature="60" Duration="120000" />
        <Wait Duration="450000" />
        <PumpToFlowcell Solution="0" ReagentName="HP2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Wait Duration="450000" />
        <Temp Temperature="40" Duration="120000" />
        <PumpToFlowcell Solution="0" ReagentName="HT2" AspirationRate="60" DispenseRate="2500" Volume="75" />
        <Temp Temperature="20" Duration="120000" />
        <TempOff />
      </ChemistryStep>
    </ChemistryDefinition>
  </ChemistryDefinitions>
  <PumpDefinitions>
    <PumpDefinition Name="Default">
      <BeforeImagingEachLane Enabled="true">
        <Lane Solution="3" AspirationRate="60" DispenseRate="2500" Volume="12" Num="1" />
        <Lane Solution="3" AspirationRate="60" DispenseRate="2500" Volume="12" Num="5" />
      </BeforeImagingEachLane>
    </PumpDefinition>
  </PumpDefinitions>
  <ReadDefinitions>
    <ReadDefinition Name="Read1">
      <Imaging ChemistryName="FirstBase" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" Cycles="99" />
      <Chemistry ChemistryName="End" />
    </ReadDefinition>
    <ReadDefinition Name="Read2">
      <Imaging ChemistryName="FirstBase" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" Cycles="99" />
      <Chemistry ChemistryName="End" />
    </ReadDefinition>
  </ReadDefinitions>
  <PrimeDefinitions>
    <PrimeDefinition Name="PairedEndPrime">
      <Prime Solution="18" />
      <Prime Solution="19" />
    </PrimeDefinition>
  </PrimeDefinitions>
  <ReagentDefinitions>
    <ReagentDefinition Name="SbsReagents">
      <Reagent Name="ICR" Description="Incorporation Mix Reagent" ViciPosition="1" />
      <Reagent Name="Water" Description="250ml bottle with laboratory grade water" ViciPosition="2" />
      <Reagent Name="SMR" Description="Scanning Mix Reagent" ViciPosition="3" />
      <Reagent Name="SB1" Description="High Salt Buffer" ViciPosition="4" />
      <Reagent Name="SB2" Description="Incorporation Buffer" ViciPosition="5" />
      <Reagent Name="SB2" Description="Incorporation Buffer" ViciPosition="6" />
      <Reagent Name="CMR" Description="Cleavage Mix Reagent" ViciPosition="7" />
      <Reagent Name="SB3" Description="Cleavage Buffer" ViciPosition="8" />
    </ReagentDefinition>
    <ReagentDefinition Name="PairedEndReagents">
      <Reagent Name="RMX" Description="Resynthesis Mix" ViciPosition="10" />
      <Reagent Name="LMX2" Description="Linearization Mix 2" ViciPosition="11" />
      <Reagent Name="BMX" Description="Blocking Mix" ViciPosition="12" />
      <Reagent Name="AMX2" Description="Amplification Mix 2" ViciPosition="13" />
      <Reagent Name="APM2" Description="AMX2 Premix" ViciPosition="14" />
      <Reagent Name="AT2" Description="100% Formamide" ViciPosition="15" />
      <Reagent Name="HP2" Description="Sequencing Primer Mix 2" ViciPosition="16" />
      <Reagent Name="HP3" Description="0.1 N NaOH" ViciPosition="18" />
      <Reagent Name="HT2" Description="Wash Buffer" ViciPosition="19" />
    </ReagentDefinition>
  </ReagentDefinitions>
</RecipeFile>